// CA1 Pyramidal cell template (weak bAP)
// Geometry: 17 sections
// Morphology: from Cutsuridis et al., 2010
// Active properties: from Migliore et al., 2018
// Author: Röth Adrian
// Mail: bioinfneuro@gmail.com

begintemplate Roe22_reduced_CA1
public is_art
public init, topol, basic_shape, subsets, geom, biophys

public soma, radTprox, radTmed, radTdist, lm_thick2, lm_medium2, lm_thin2, axon
public lm_thick1, lm_medium1, lm_thin1, oriprox1, oridist1_1, oridist1_2, oriprox2, oridist2_1, oridist2_2
public rad_t1, rad_t2, rad_t3

public all, somatic, apical, basal, axonal, oblique_prox, oblique_med, oblique_dist, trunk_prox, trunk_med, trunk_dist
objref all, somatic, apical, basal, axonal, oblique_prox, oblique_med, oblique_dist, trunk_prox, trunk_med, trunk_dist
objref this, CellRef

create soma[1], radTprox, radTmed, radTdist, lm_thick2, lm_medium2, lm_thin2, axon
create rad_t1, rad_t2, rad_t3
create lm_thick1, lm_medium1, lm_thin1, oriprox1, oridist1_1, oridist1_2, oriprox2, oridist2_1, oridist2_2

proc init() {
  topol()
  basic_shape()
  subsets()
  geom()
  geom_nseg()
  insertChannel()
  biophys()
}

proc topol() { local i
  connect radTprox(0), soma(1)
  connect radTmed(0), radTprox(1)
  connect radTdist(0), radTmed(1)

  connect rad_t1(0), radTprox(0.5)
  connect rad_t2(0), radTmed(0.5)
  connect rad_t3(0), radTdist(0.5)

  connect lm_thick2(0), radTdist(1)
  connect lm_medium2(0), lm_thick2(1)
  connect lm_thin2(0), lm_medium2(1)
  connect lm_thick1(0), radTdist(1)
  connect lm_medium1(0), lm_thick1(1)
  connect lm_thin1(0), lm_medium1(1)

  connect oriprox1(0), soma(0)
  connect oridist1_1(0), oriprox1(1)
  connect oridist1_2(0), oriprox1(1)
  connect oriprox2(0), soma(1)
  connect oridist2_1(0), oriprox2(1)
  connect oridist2_2(0), oriprox2(1)
  connect axon(0), soma(1)
}

proc basic_shape() {
  soma {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(15, 0, 0, 1)}

  radTprox {pt3dclear() pt3dadd(15, 0, 0, 1) pt3dadd(15, 30, 0, 1)}
  radTmed {pt3dclear() pt3dadd(15, 30, 0, 1) pt3dadd(15, 60, 0, 1)}
  radTdist {pt3dclear() pt3dadd(15, 60, 0, 1) pt3dadd(15, 90, 0, 1)}

  rad_t1 {pt3dclear() pt3dadd(15, 15, 0, 1) pt3dadd(75, 45, 0, 1)}
  rad_t2 {pt3dclear() pt3dadd(15, 45, 0, 1) pt3dadd(-45, 75, 0, 1)}
  rad_t3 {pt3dclear() pt3dadd(15, 75, 0, 1) pt3dadd(75, 105, 0, 1)}

  lm_thick2 {pt3dclear() pt3dadd(15, 90, 0, 1) pt3dadd(45, 105, 0, 1)}
  lm_medium2 {pt3dclear() pt3dadd(45, 105, 0, 1) pt3dadd(75, 120, 0, 1)}
  lm_thin2 {pt3dclear() pt3dadd(75, 120, 0, 1) pt3dadd(105, 135, 0, 1)}
  lm_thick1 {pt3dclear() pt3dadd(15, 90, 0, 1) pt3dadd(-15, 105, 0, 1)}
  lm_medium1 {pt3dclear() pt3dadd(-15, 105, 0, 1) pt3dadd(-45, 120, 0, 1)}
  lm_thin1 {pt3dclear() pt3dadd(-45, 120, 0, 1) pt3dadd(-70, 135, 0, 1)}

  oriprox1 {pt3dclear() pt3dadd(0, 0, 0, 1) pt3dadd(-45, -30, 0, 1)}
  oridist1_1 {pt3dclear() pt3dadd(-45, -30, 0, 1) pt3dadd(-75, -60, 0, 1)}
  oridist1_2 {pt3dclear() pt3dadd(-45, -30, 0, 1) pt3dadd(-85, -30, 0, 1)}
  oriprox2 {pt3dclear() pt3dadd(15, 0, 0, 1) pt3dadd(60, -30, 0, 1)}
  oridist2_1 {pt3dclear() pt3dadd(60, -30, 0, 1) pt3dadd(105, -60, 0, 1)}
  oridist2_2 {pt3dclear() pt3dadd(60, -30, 0, 1) pt3dadd(100, -30, 0, 1)}

  axon {pt3dclear() pt3dadd(15, 0, 0, 1) pt3dadd(15, -150, 0, 1)}
}

proc subsets() {
  all = new SectionList()
  soma all.append()
  radTprox all.append()
  radTmed all.append()
  radTdist all.append()
  rad_t1 all.append()
  rad_t2 all.append()
  rad_t3 all.append()
  lm_thick2 all.append()
  lm_medium2 all.append()
  lm_thin2 all.append()
  lm_thick1 all.append()
  lm_medium1 all.append()
  lm_thin1 all.append()
  oriprox1 all.append()
  oridist1_1 all.append()
  oridist1_2 all.append()
  oriprox2 all.append()
  oridist2_1 all.append()
  oridist2_2 all.append()
  axon all.append()

  apical = new SectionList()  // apical tuft
  lm_thick2 apical.append()
  lm_medium2 apical.append()
  lm_thin2 apical.append()
  lm_thick1 apical.append()
  lm_medium1 apical.append()
  lm_thin1 apical.append()


  oblique_prox = new SectionList()
  rad_t1 oblique_prox.append()

  oblique_med = new SectionList()
  rad_t2 oblique_med.append()

  oblique_dist = new SectionList()
  rad_t3 oblique_dist.append()


  trunk_prox = new SectionList()
  radTprox trunk_prox.append()

  trunk_med = new SectionList()
  radTmed trunk_med.append()

  trunk_dist = new SectionList()
  radTdist trunk_dist.append()

  basal = new SectionList()
  oriprox1 basal.append()
  oridist1_1 basal.append()
  oridist1_2 basal.append()
  oriprox2 basal.append()
  oridist2_1 basal.append()
  oridist2_2 basal.append()

  somatic = new SectionList()
  soma somatic.append()

  axonal = new SectionList()
  axon axonal.append()
}

proc geom() {
  soma {  L = 10  diam = 10  }

  // SR is first 500um of apical dendrite
  radTprox {  L = 100  diam = 4  }
  radTmed {  L = 100  diam = 3  }
  radTdist {  L = 200  diam = 2  }

  // SR thin dendrites
  rad_t1 {  L = 150  diam = 1  }
  rad_t2 {  L = 150  diam = 1  }
  rad_t3 {  L = 150  diam = 1  }

  // OLM is final 300um of apical dendrite
  lm_thick2 {  L = 100  diam = 2  }
  lm_medium2 {  L = 100  diam = 1.5  }
  lm_thin2 {  L = 50  diam = 1  }
  lm_thick1 {  L = 100  diam = 2  }
  lm_medium1 {  L = 100  diam = 1.5  }
  lm_thin1 {  L = 50  diam = 1  }

  // Basal dendrites extend 300 um
  oriprox1 {  L = 100  diam = 2  }
  oridist1_1 {  L = 200  diam = 1.5  }
  oridist1_2 {  L = 200  diam = 1.5  }
  oriprox2 {  L = 100  diam = 2  }
  oridist2_1 {  L = 200  diam = 1.5  }
  oridist2_2 {  L = 200  diam = 1.5  }

  // Short section of axon
  axon {  L = 150  diam = 1  }
}


proc geom_nseg() {
  forsec all {
	nseg = 1 + 2*int(L/40)
  }
}

proc distribute_distance(){local x localobj sl
  strdef stmp, distfunc, mech

  sl = $o1
  mech = $s2
  distfunc = $s3
  soma distance(0, 0.5)
  sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
    sprint(stmp, distfunc, secname(), x, distance(x))
    execute(stmp)
  }
}

proc insertChannel() {
    forsec all {
        insert pas
        insert kdr
        insert nax
    }

    forsec somatic {
        insert kmb
        insert kap
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec apical {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec oblique_prox {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec oblique_med {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec oblique_dist {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec trunk_prox {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec trunk_med {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec trunk_dist {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec basal {
        insert kad
        insert hd
        insert can
        insert cal
        insert cat
        insert kca
        insert cagk
        insert cacum
    }

    forsec this.axonal {
        insert kmb
        insert kap
        insert nap
    }

}
proc biophys() {

    celsius = 35 //37
    v_init = -65 //-70

    forsec all {
    cm = 1
    ena = 50
    ek = -90
    }

    // opt for depolarization block
    forsec somatic {
        ghdbar_hd = 1.9042409723832741e-05
        gkabar_kap = 0.0075 // 0.075979013614757188
        gbar_kmb = 0.001 // 0.0054486096208209286
        gkdrbar_kdr = 0.0015 //0.0043036502438625682
        gbar_nax = 0.035 //0.0035 // 0.038280628170345957
        gcalbar_cal =  0.0005 //8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat =  0.00005 // 1.184948741542104e-06
        gbar_kca = 0.0015 //9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
    }

    forsec axonal {
        gbar_nax = 0.21113423945477339 // weak 0.035
        gkdrbar_kdr = 0.011664045469379856
        gbar_kmb = 0.026473888790212396
        gkabar_kap = 0.1636942175250268
        // added persistent sodium in axon (nap) from Uebachs et al 2010
        gbar_nap = 0.0003
        Ra = 85.202399381150826
        g_pas = 0.00012898002027660884
        e_pas = -79.917091935442244
    }

    forsec apical {
        gkabar_kad = 0.012921529390557651
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.0043036502438625682 
        gbar_nax =  0.038280628170345957   
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
        //gkabar_kad = 0.25
    }

    forsec oblique_prox {
        gkabar_kad = 0.012921529390557651
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.0043036502438625682 
        gbar_nax =  0.038280628170345957   
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
        //gkabar_kad = 0.25
    }
    
    forsec oblique_med {
        gkabar_kad = 0.012921529390557651
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.0043036502438625682 
        gbar_nax =  0.038280628170345957   
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
        //gkabar_kad = 0.25
    }
    
    forsec oblique_dist {
        gkabar_kad = 0.012921529390557651
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.0043036502438625682 
        gbar_nax =  0.038280628170345957   
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
        //gkabar_kad = 0.25
    }
    
    forsec trunk_prox {
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.02
        gbar_nax = 0.02
        gkabar_kad =  0.12921529390557651
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
    } 
    
    forsec trunk_med {
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.0025
        gbar_nax = 0.007
        gkabar_kad =  0.0002
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
    }

    forsec trunk_dist {
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.02
        gbar_nax = 0.04
        gkabar_kad =  0.0135
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
    }

    forsec basal {
        gkabar_kad = 0.012921529390557651
        ghdbar_hd = 1.9042409723832741e-05
        gkdrbar_kdr = 0.0043036502438625682
        gbar_nax = 0.038280628170345957
        gcalbar_cal = 8.0324964335287e-06
        gcanbar_can = 2.2618914062501833e-06
        gcatbar_cat = 1.184948741542104e-06
        gbar_kca = 9.0311387916396796e-05
        gbar_cagk = 4.4820097108998517e-05
        Ra = 115.3957607556371
        g_pas = 9.031387191839301e-05
    }
     
    distribute_distance(apical, "e_pas", "(-65.726902768520958-5*%.17g/150)")
    distribute_distance(basal, "e_pas", "(-65.726902768520958-5*%.17g/150)")
    distribute_distance(somatic, "e_pas", "(-65.726902768520958-5*%.17g/150)")

}

func is_art() { return 0 }

endtemplate Roe22_reduced_CA1

