/*
This is a CellBuilder-like file written for the simulator NEURON
by an automatic procedure "neuron_template_tree" part of the TREES package
in MATLAB
copyright 2009-2017 Hermann Cuntz
heavy modifications by Marcel Beining, 2014
*/

begintemplate HUARTIF

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  is_artificial = 0
}

public soma
public basal
public trunk
public peritrunk
public apical

public allregobj
public allreg
public alladendreg
public allaxonreg
public regsoma
public regbasal
public regtrunk
public regperitrunk
public regapical
public is_artificial

create soma[2]
create basal[100]
create trunk[8]
create peritrunk[52]
create apical[44]

proc topol_1() {
  connect soma[1](0),soma[0](1)
  connect trunk[0](0),soma[1](1)
  connect trunk[1](0),trunk[0](1)
  connect apical[0](0),trunk[1](1)
  connect apical[1](0),apical[0](1)
  connect trunk[2](0),apical[1](1)
  connect trunk[3](0),trunk[2](1)
  connect apical[2](0),trunk[3](1)
  connect apical[3](0),apical[2](1)
  connect trunk[4](0),apical[3](1)
  connect trunk[5](0),trunk[4](1)
  connect apical[4](0),trunk[5](1)
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}
proc topol() {
  topol_1()
  basic_shape()
}

proc shape3d_1() {
  soma[0] {pt3dclear()
    pt3dadd(-0.0001, 0, 0, 26.6896822922267)
    pt3dadd(0, 0, 0, 26.6896822922267)
  }
  soma[1] {pt3dclear()
    pt3dadd(0, 0, 0, 26.3684276443301)
    pt3dadd(1.28313166673559, -0.551207167964138, -0.243186559024521, 26.3684276443301)
    pt3dadd(2.39371833934495, -1.04490469610265, -0.50544411278656, 25.3799605583365)
    pt3dadd(4.08517081266275, -1.84272160760073, -0.996176757028061, 24.5327910232411)
    pt3dadd(6.07635000483809, -2.79252137720856, -1.70655273885405, 22.4106371007208)
    pt3dadd(8.26645376901548, -3.84067324941635, -2.56190069117897, 20.6242125550195)
    pt3dadd(10.1762319333977, -4.70037932238838, -3.39496911549274, 18.0575055434582)
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  }
}
proc shape3d_2() {
  apical[14] {
    pt3dadd(270.115928138001, 37.0494898803624, 18.6976089524108, 1.3)
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  }
}
proc shape3d_3() {
  apical[20] {
    pt3dadd(284.817207767769, -6.74886887366002, -48.9290040482945, 1.3)
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  }
}
proc shape3d_4() {
  peritrunk[19] {
  }
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  }
}
proc shape3d_5() {
  peritrunk[36] {
    pt3dadd(174.64823476647, -58.0596323533002, -48.9830146125146, 1.3)
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  }
}
proc shape3d_6() {
  basal[1] {
    pt3dadd(-48.8084856148153, -3.80033711936725, -11.3204517863859, 1.19758040269344)
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  }
}
proc shape3d_7() {
  basal[17] {
    pt3dadd(-148.542687531075, -35.3778772602485, -36.3794479123495, 1.1)
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  }
}
proc shape3d_8() {
  basal[32] {
    pt3dadd(-137.173937740898, 82.319795876993, -41.016645503583, 1.1)
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  }
}
proc shape3d_9() {
  basal[43] {
    pt3dadd(-49.786784156897, -22.6010302337941, -35.4550026828644, 1.1)
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  }
}
proc shape3d_10() {
  basal[59] {
    pt3dadd(-57.6836624801158, 65.2228921779168, -45.9185758534992, 1.1)
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  }
}
proc shape3d_11() {
  basal[68] {
    pt3dadd(-40.6077988597741, 12.4280843376429, -77.8261862246684, 1.1)
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  }
}
proc shape3d_12() {
  basal[83] {
  }
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  }
}
proc shape3d_13() {
  basal[97] {
    pt3dadd(-33.7262260767979, -45.1992293137877, -37.0087024290017, 1.1)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
}

objref allreg, allregobj, alladendreg, allaxonreg, sec
objref regsoma
objref regbasal
objref regtrunk
objref regperitrunk
objref regapical
proc subsets() { local counter
  allregobj   = new List()
  allreg      = new SectionList()
  alladendreg = new SectionList()
  allaxonreg  = new SectionList()
  regsoma = new SectionList()
  for counter = 0, 1 soma[counter] {
    regsoma.append()
    sec = new SectionRef()
    allregobj.append(sec)
    allreg.append()
  }
  regbasal = new SectionList()
  for counter = 0, 99 basal[counter] {
    regbasal.append()
    sec = new SectionRef()
    allregobj.append(sec)
    allreg.append()
  }
  regtrunk = new SectionList()
  for counter = 0, 7 trunk[counter] {
    regtrunk.append()
    sec = new SectionRef()
    allregobj.append(sec)
    allreg.append()
  }
  regperitrunk = new SectionList()
  for counter = 0, 51 peritrunk[counter] {
    regperitrunk.append()
    sec = new SectionRef()
    allregobj.append(sec)
    allreg.append()
  }
  regapical = new SectionList()
  for counter = 0, 43 apical[counter] {
    regapical.append()
    sec = new SectionRef()
    allregobj.append(sec)
    allreg.append()
  }
}
proc geom() {
}
proc geom_nseg() {
}
proc biophys() {
    // ***** Insert mechanisms *****
    forsec regapical {
    insert pas
    cm = 1
    Ra = 50
    g_pas = 7.01673e-06
    e_pas = -70
    insert hha_old
    gnabar_hha_old = 0.007
    gkbar_hha_old = 0.000868
    ar2_hha_old = 0.42928
    gl_hha_old = 0
    el_hha_old = -70
    ena_hha_old = 50
    ek_hha_old = -77
    insert h
    gbar_h = 3.09494e-05
    eh_h = -10
    ena_h = 50
    insert kap
    gkabar_kap = 0
    ek_kap = -80
    insert kad
    gkabar_kad = 0.0276387
    ek_kad = -80
    insert km
    gbar_km = 0.12
    ek_km = -80
    insert calH
    gcalbar_calH = 0.00031635
    eca_calH = 140
    insert cat
    gcatbar_cat = 0.000181714
    insert car
    gcabar_car = 0.0003
    eca_car = 140
    insert kca
    gbar_kca = 0.0005
    ek_kca = -80
    insert mykca
    gkbar_mykca = 0.01815
    ek_mykca = -80
    insert cad
    depth_cad = 0.1
    taur_cad = 200
    cainf_cad = 0.0001
    insert nap
    gnabar_nap = 2.8e-06
    ena_nap = 50
    }

    forsec regbasal {
    insert pas
    cm = 1
    Ra = 50
    g_pas = 5.24768e-06
    e_pas = -70
    insert hha_old
    gnabar_hha_old = 0.007
    gkbar_hha_old = 0.000868
    ar2_hha_old = 1
    W_hha_old = 0.016
    gl_hha_old = 0
    el_hha_old = -70
    ena_hha_old = 50
    ek_hha_old = -77
    insert h
    gbar_h = 1.872e-05
    eh_h = -10
    ena_h = 50
    insert kap
    gkabar_kap = 0.012
    ek_kap = -80
    insert kad
    gkabar_kad = 0.012
    ek_kad = -80
    insert calH
    gcalbar_calH = 0.00031635
    insert kca
    gbar_kca = 0.0001
    insert mykca
    gbar_mykca = 0.0001
    insert cat
    gcatbar_cat = 0.0001
    }

    forsec regperitrunk {
    insert pas
    cm = 1
    Ra = 50
    g_pas = 5e-06
    e_pas = -70
    insert hha_old
    gnabar_hha_old = 0.007
    gkbar_hha_old = 0.000868
    ar2_hha_old = 1
    gl_hha_old = 0
    el_hha_old = -70
    ena_hha_old = 50
    ek_hha_old = -77
    insert h
    gbar_h = 1.872e-05
    eh_h = -10
    ena_h = 50
    insert kap
    gkabar_kap = 0.0075
    ek_kap = -80
    insert kad
    gkabar_kad = 0.0075
    ek_kad = -80
    insert km
    gbar_km = 0.06
    ek_km = -80
    insert calH
    gcalbar_calH = 0.00031635
    eca_calH = 140
    insert cat
    gcatbar_cat = 0.0001
    insert car
    gcabar_car = 3e-05
    eca_car = 140
    insert kca
    gbar_kca = 0.0001
    ek_kca = -80
    insert mykca
    gkbar_mykca = 0.0165
    ek_mykca = -80
    insert cad
    depth_cad = 0.1
    taur_cad = 200
    cainf_cad = 0.0001
    insert nap
    gnabar_nap = 5.6e-07
    ena_nap = 50
    }

    forsec regsoma {
    insert pas
    cm = 1
    Ra = 50
    g_pas = 5e-06
    e_pas = -70
    insert hha2
    gnabar_hha2 = 0.007
    gkbar_hha2 = 0.0014
    ar2_hha2 = 1
    W_hha2 = 0.016
    gl_hha2 = 0
    el_hha2 = -70
    ena_hha2 = 50
    ek_hha2 = -77
    insert h
    gbar_h = 1.872e-05
    K_h = 8.8
    vhalf_h = -82
    eh_h = -10
    ena_h = 50
    insert kap
    gkabar_kap = 0.0075
    ek_kap = -80
    insert km
    gbar_km = 0.06
    ek_km = -80
    insert cal
    gcalbar_cal = 0.007
    insert cat
    gcatbar_cat = 5e-05
    insert somacar
    gcabar_somacar = 0.003
    eca_somacar = 140
    insert kca
    gbar_kca = 0.0005
    ek_kca = -80
    insert mykca
    gkbar_mykca = 0.09075
    ek_mykca = -80
    insert cad
    depth_cad = 0.1
    taur_cad = 200
    cainf_cad = 0.0001
    insert hha_old
    gkbar_hha_old = 0.000868
    ar2_hha_old = 1
    insert calH
    gcalbar_calH = 0.00031635
    insert kad
    gkabar_kad = 0.0075
    }

    forsec regtrunk {
    insert pas
    cm = 1
    Ra = 50
    g_pas = 5e-06
    e_pas = -70
    insert hha_old
    gnabar_hha_old = 0.007
    gkbar_hha_old = 0.000868
    ar2_hha_old = 1
    gl_hha_old = 0
    el_hha_old = -70
    ena_hha_old = 50
    ek_hha_old = -77
    insert h
    gbar_h = 1.872e-05
    eh_h = -10
    ena_h = 50
    insert kap
    gkabar_kap = 0.0075
    ek_kap = -80
    insert kad
    gkabar_kad = 0.0075
    ek_kad = -80
    insert km
    gbar_km = 0.06
    ek_km = -80
    insert calH
    gcalbar_calH = 0.00031635
    eca_calH = 140
    insert cat
    gcatbar_cat = 0.0001
    insert car
    gcabar_car = 3e-05
    eca_car = 140
    insert kca
    gbar_kca = 0.0001
    ek_kca = -80
    insert mykca
    gkbar_mykca = 0.0165
    ek_mykca = -80
    insert cad
    depth_cad = 0.1
    taur_cad = 200
    cainf_cad = 0.0001
}

}
access soma
proc init() {
  celldef()
}

endtemplate HUARTIF

